PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = auditory_localizer
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine instructions
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    TextComponent text_instr
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this scan, you will hear a 1-minute audio clip, which is a combination of music, speech, and nature sound.

        The clip will be repeated for 5 times.

        Your only task is to listen carefully to the clip.

        Please stay still while you are listening.
    KeyboardComponent key_resp_instr
      allowedKeys = 'right','space', 'enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine audio_clip
    RoutineSettingsComponent audio_clip
      stopVal [duration (s)] = 60
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    SoundComponent audio_localizer
      sound [set every repeat] = /Users/gio/projects/SwitchCode/AudLocalizer/auditory_localizer.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      syncScreenRefresh = False
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  Routine wait_period
    RoutineSettingsComponent wait_period
      stopVal [duration (s)] = 15
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    TextComponent text_wait
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = wait
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  Routine blank_6
    RoutineSettingsComponent blank_6
      stopVal [duration (s)] = 6
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Flow
  Routine instructions
  Routine wait_period
  LoopInitiator repetitions loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    Routine audio_clip
    Routine blank_6
  LoopTerminator repetitions
