PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = ses-002_task-stories
  keyboardBackend = PsychToolbox
  logging level = warning
  measureFrameRate = False
  runMode = 1
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Routines
  Routine wait
    RoutineSettingsComponent wait
      stopVal [duration (s)] = 15
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    TextComponent text_wait
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = wait
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    KeyboardComponent key_go_back
      allowedKeys = 'left'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 15
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    CodeComponent go_back_code
      Code Type = Auto->JS
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      Each Frame:
        if key_go_back.keys == 'left':
            go_back.finished = False
        else:
            go_back.finished = True
  Routine story_instructions
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    TextComponent text_story_instr
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        The experiment consists of 6 scans.

        During each scan, you will hear a story that lasts about 10 minutes. Your only task is to listen carefully to the story. Please stay still while you are listening.

        After each story, a blank screen will appear for around 20 seconds, and then you will be asked a question about the story you just heard. Please answer each question out loud in one or two sentences.
    KeyboardComponent key_resp_story_instr
      allowedKeys = 'right','space','enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank_200ms
    RoutineSettingsComponent blank_200ms
      stopVal [duration (s)] = .2
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  Routine story_blank
    RoutineSettingsComponent story_blank
      color = -1.0000, -1.0000, -1.0000
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    TextComponent story_pause
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $story_blank
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  Routine blank_15
    RoutineSettingsComponent blank_15
      color = -1.0000, -1.0000, -1.0000
      stopVal [duration (s)] = 15
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    TextComponent blank_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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  Routine story
    RoutineSettingsComponent story
      color = -1.0000, -1.0000, -1.0000
      stopVal [duration (s)] = story_len
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    SoundComponent story_audio
      sound [set every repeat] = $file_names
      speakerIndex = 0.0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = story_len
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    TextComponent text_plus
      letterHeight = 0.12
      startVal [time (s)] = 0
      stopVal [duration (s)] = story_len
      text = +
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  Routine question
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    TextComponent question_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
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    KeyboardComponent question_resp
      allowedKeys = 'right','space','enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine present_story_num
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    TextComponent story_num_txt
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Story ' + str(story_loop.thisN + 1)
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    KeyboardComponent key_resp_story_start
      allowedKeys = 'right','space','enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine story_instructions
  Routine blank_200ms
  LoopInitiator story_loop loopType="TrialHandler"
    conditionsFile = ses-002_task-stories.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'story_name': 'how_to_draw_a_nekkid_man', 'file_names': 'stimuli/howtodraw.wav', 'story_len': 753, 'question': "What caused tension in the narrator's marriage after they began attending art school?"},
      {'story_name': 'beneath_the_mushroom_cloud', 'file_names': 'stimuli/beneaththemushroomcloud.wav', 'story_len': 724, 'question': 'Why did the narrator and his family travel to Japan in 2012?'},
      {'story_name': 'chrismas_1940', 'file_names': 'stimuli/christmas1940.wav', 'story_len': 527, 'question': 'Where did Igor get off the ship and escape?'},
      {'story_name': 'not_on_the_usual_tour', 'file_names': 'stimuli/notontheusualtour.wav', 'story_len': 532, 'question': "In which state did the narrator perform his best friends' wedding?"},
      {'story_name': 'shopping_in_china', 'file_names': 'stimuli/shoppinginchina.wav', 'story_len': 717, 'question': 'What gift did the narrator want to purchase for her husband while they were in China?'},
      {'story_name': 'vixen_and_the_ussr', 'file_names': 'stimuli/vixen.wav', 'story_len': 824, 'question': 'Why did Vixen look "filled out" when she was found?'}]
    LoopInitiator go_back loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine present_story_num
      Routine blank_200ms
      Routine wait
    LoopTerminator go_back
    Routine story
    Routine blank_15
    Routine question
    Routine blank_200ms
  LoopTerminator story_loop
